nchannels_in = 2
fragsize = 48
srate = 48000


mhalib = mhachain
iolib = MHAIOJack
instance = openMHA

mha.algos= [wavrec:in transducers wavrec:out]

mha.transducers.calib_in.peaklevel = [105 105]
#mha.transducers.calib_in.fir = [[1 0 0];[1 0 0]]
mha.transducers.calib_in.fir = [[0.05715807311106352 -0.09143269871454363 0.1279991931078954 -0.1229917176472585 0.03865469459901275 0.1208478993167953 -0.8820088913999001 -0.2804647683673479 0.01220373264309236 -0.1613181711981604 0.1851746406520001 -0.1149274499260817 0.04848940622236251 0.03877744359967165 -0.0533381761233464 0.06159030633073432];[0.05715807311106352 -0.09143269871454363 0.1279991931078954 -0.1229917176472585 0.03865469459901275 0.1208478993167953 -0.8820088913999001 -0.2804647683673479 0.01220373264309236 -0.1613181711981604 0.1851746406520001 -0.1149274499260817 0.04848940622236251 0.03877744359967165 -0.0533381761233464 0.06159030633073432]]
mha.transducers.calib_out.peaklevel = [101 101.5]
#mha.transducers.calib_out.fir = [[]]
mha.transducers.calib_out.fir = [[-0.0008493245925390666 0.212079412419309 -0.2154042301549152 -0.3025302897591955 0.199775619155252 -0.1870229266228919 -0.7938470989741924 0.8603675948896129 0.478909142449632 -0.6085003614478869 0.07361724294587288 -0.2227288472200418 0.5368590771510556 0.09111033102709504 -0.480841985504344 0.4390128813205694 0.1246445045880798 0.1269349882268854 -0.04198884835603302 -0.2353992092127431 0.2510197443337887 0.0874549322159773 -0.02924594207986645 0.03500546824173258 0.02306546293053465 0.02935658669200722 -0.04983617327855945 0.01127518725520369 -0.03557732411817455 -0.08252133997595766 0.09626162395832474 -0.03965187059451832 -0.02978787895722923 -0.02032215684247022 -0.07226667524292203 0.1197853714014079 -0.07509868745444499 -0.06716864521583707 0.01498418308780167 -0.0128555683058882 0.005643946502094473 -0.05468486125562624 -0.03084551017547309 0.01713430717627588 -0.04031926622896171 -0.0001434979760821464 -0.02137092800354339 -0.02993680876827081];[ -0.0008493245925390666 0.212079412419309 -0.2154042301549152 -0.3025302897591955 0.199775619155252 -0.1870229266228919 -0.7938470989741924 0.8603675948896129 0.478909142449632 -0.6085003614478869 0.07361724294587288 -0.2227288472200418 0.5368590771510556 0.09111033102709504 -0.480841985504344 0.4390128813205694 0.1246445045880798 0.1269349882268854 -0.04198884835603302 -0.2353992092127431 0.2510197443337887 0.0874549322159773 -0.02924594207986645 0.03500546824173258 0.02306546293053465 0.02935658669200722 -0.04983617327855945 0.01127518725520369 -0.03557732411817455 -0.08252133997595766 0.09626162395832474 -0.03965187059451832 -0.02978787895722923 -0.02032215684247022 -0.07226667524292203 0.1197853714014079 -0.07509868745444499 -0.06716864521583707 0.01498418308780167 -0.0128555683058882 0.005643946502094473 -0.05468486125562624 -0.03084551017547309 0.01713430717627588 -0.04031926622896171 -0.0001434979760821464 -0.02137092800354339 -0.02993680876827081]]

mha.transducers.calib_out.softclip.tau_attack = 0.003
mha.transducers.calib_out.softclip.tau_decay = 0.004
mha.transducers.calib_out.softclip.threshold = 0.3
mha.transducers.calib_out.softclip.slope = 0.1
mha.transducers.calib_out.softclip.tau_clip = 1
mha.transducers.calib_out.softclip.max_clipped = 1
mha.transducers.calib_out.do_clipping = yes
mha.transducers.plugin_name=mhachain


mha.transducers.mhachain.algos = [addsndfile:playback altplugs analysispath:analysis]

mha.transducers.mhachain.playback.loop = no
mha.transducers.mhachain.playback.mode = add
mha.transducers.mhachain.playback.levelmode = rms
mha.transducers.mhachain.playback.level = 70
mha.transducers.mhachain.playback.channels = [0 1]

mha.in.prefix=/dev/shm/record_in
mha.in.record=no
mha.in.use_date=no
mha.out.prefix=/dev/shm/record_out
mha.out.record=no
mha.out.use_date=no


mha.transducers.mhachain.analysis.fragsize=512
mha.transducers.mhachain.analysis.plugname = overlapadd
mha.transducers.mhachain.analysis.plug.fftlen=1024
mha.transducers.mhachain.analysis.plug.wnd.len=512
mha.transducers.mhachain.analysis.plug.plugin_name = mhachain
mha.transducers.mhachain.analysis.plug.mhachain.algos=[ ...
fftfilterbank:anafilter ...
rmslevel:rms ...
]                                                                                                       
mha.transducers.mhachain.analysis.plug.mhachain.anafilter.f = [250 500 1000 2000 4000 8000]

mha.transducers.mhachain.altplugs.plugs = [overlapadd:dynamiccompression]
mha.transducers.mhachain.altplugs.select = dynamiccompression

mha.transducers.mhachain.altplugs.dynamiccompression.plugin_name = mhachain
mha.transducers.mhachain.altplugs.dynamiccompression.fftlen = 384
mha.transducers.mhachain.altplugs.dynamiccompression.wnd.type = hanning
mha.transducers.mhachain.altplugs.dynamiccompression.wnd.user = []
mha.transducers.mhachain.altplugs.dynamiccompression.wnd.len = 128
mha.transducers.mhachain.altplugs.dynamiccompression.wnd.pos = 0.5
mha.transducers.mhachain.altplugs.dynamiccompression.wnd.exp = 1
mha.transducers.mhachain.altplugs.dynamiccompression.zerownd.type = rect
mha.transducers.mhachain.altplugs.dynamiccompression.zerownd.user = []

mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.algos = [fftfilterbank dc combinechannels fshift_hilbert]

mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.fshift_hilbert.df=80
mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.fshift_hilbert.fmin=2000
mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.fshift_hilbert.fmax=12000

mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.fftfilterbank.unit = Hz

mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.fftfilterbank.f = [177 297 500 841 1414 2378 4000 6727 11314]

mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.fftfilterbank.fscale = log

mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.fftfilterbank.ovltype = hanning

mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.fftfilterbank.ftype = center


mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.dc.gtdata = [[ 22.667 22.667 16.0 9.333 2.667 -4.0 ];[ 23.417 23.417 16.75 10.083 3.417 -3.25 ];[ 24.167 24.167 17.5 10.833 4.167 -2.5 ];[ 24.917 24.917 18.25 11.583 4.917 -1.75 ];[ 25.667 25.667 19.0 12.333 5.667 -1.0 ];[ 26.417 26.417 19.75 13.083 6.417 -0.25 ];[ 27.167 27.167 20.5 13.833 7.167 0.5 ];[ 27.917 27.917 21.25 14.583 7.917 1.25 ];[ 28.667 28.667 22.0 15.333 8.667 2.0 ];[ 22.667 22.667 16.0 9.333 2.667 -4.0 ];[ 23.417 23.417 16.75 10.083 3.417 -3.25 ];[ 24.167 24.167 17.5 10.833 4.167 -2.5 ];[ 24.917 24.917 18.25 11.583 4.917 -1.75 ];[ 25.667 25.667 19.0 12.333 5.667 -1.0 ];[ 26.417 26.417 19.75 13.083 6.417 -0.25 ];[ 27.167 27.167 20.5 13.833 7.167 0.5 ];[ 27.917 27.917 21.25 14.583 7.917 1.25 ];[ 28.667 28.667 22.0 15.333 8.667 2.0 ]]

mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.dc.gtmin = [0]

mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.dc.gtstep = [20]

mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.dc.tau_attack = [0.02]

mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.dc.tau_decay = [0.1]

mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.dc.fb = fftfilterbank

mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.dc.chname = fftfilterbank_nchannels

mha.transducers.mhachain.altplugs.dynamiccompression.mhachain.combinechannels.outchannels = 2


cmd=start

